PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial1_
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Hello welcome to X experiment
    SliderComponent slider
      color = -0.2157, 0.1686, 0.8588
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 5.0
      styleTweaks = ('triangleMarker',)
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial1_
    Routine trial1_
    Routine trial1_
  LoopTerminator trials
  Routine trial1_
